OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Yann Renard
0x9f5c4075 = Signal Monitoring
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

Graz Motor Imagery BCI Stimulator => #0
  Lua Script = C:/Users/arellanon/Documents/Tesis/MI-OpenBCI-master/OpenViBe Scenarios/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 5
  First Class = OVTK_GDF_Right
  Second Class = OVTK_GDF_Tongue
  Baseline Duration (in sec) = 10
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 4
  Feedback Duration (in sec) = 0
  End of Trial Minimum Duration (in sec) = 2.500
  End of Trial Maximum Duration (in sec) = 4.500
Stimulations=#0 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false

Acquisition client => #2
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#2.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#2.Signal stream -> Temporal filter => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 3
  Low cut frequency (Hz) = 0.1
  High cut frequency (Hz) = 50.000000
  Pass band ripple (dB) = 0.500000
Data=#4, Stimulations=#2.Stimulations, Channel Units=#2.Channel units -> Signal display "Filtered signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Signal=#4, Stimulation=#2.Stimulations -> GDF file writer
  Filename = C:/Users/arellanon/Documents/Tesis/data/S00_FILT_S1R0.gdf
Input stream 2=#4, Input stream 3=#2.Stimulations -> Generic stream writer
  Filename = C:/Users/arellanon/Documents/Tesis/data/S00_FILT_S1R0.ov
  Use compression = false
Input stream 2=#2.Signal stream, Input stream 3=#2.Stimulations -> Generic stream writer
  Filename = C:/Users/arellanon/Documents/Tesis/data/S00_S1R0.ov
  Use compression = false
Signal=#2.Signal stream, Stimulation=#2.Stimulations -> GDF file writer
  Filename = C:/Users/arellanon/Documents/Tesis/data/S00_S1R0.gdf
