OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Overview

  Run this scenario to collect some training data. Those
  data will later be used to train a classifier
  for online use.

  When you start this scenario, just wait 40
  seconds before it starts the instruction sequence.

  You will then be presented right arrows to
  let you imagine right hand movements.
  There will be 30 arrows. If no arrow appears, just relax.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  Note: It is always a good idea to
  monitor the signals during an experiment

Graz Motor Imagery BCI Stimulator => #0
  Lua Script = C:/Users/arellanon/Documents/Tesis/MI-OpenBCI-master/OpenViBe Scenarios/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Right
  Second Class = OVTK_GDF_Tongue
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 4
  Feedback Duration (in sec) = 0
  End of Trial Minimum Duration (in sec) = 2.500
  End of Trial Maximum Duration (in sec) = 4.500
Stimulations=#0 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false

Acquisition client => #2
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#2.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#2.Signal stream -> Temporal filter => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 3
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 45
  Pass band ripple (dB) = 0.3
Input signal=#4, Input stimulations=#2.Stimulations -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
Data=#4, Stimulations=#2.Stimulations, Channel Units=#2.Channel units -> Signal display "Filtered signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5.000000
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input signal=#4, Input stimulations=#2.Stimulations -> LSL Export (Gipsa)
  Stream name = OpenViBE Stream
  Stream type = EEG
Input stream 1=#2.Experiment information, Input stream 2=#4, Input stream 3=#2.Stimulations -> Generic stream writer
  Filename = C:/Users/arellanon/Documents/Tesis/data/Z03/R4/Z03_FILT_S1R4.ov
  Use compression = false
Experiment information=#2.Experiment information, Signal=#4, Stimulation=#2.Stimulations -> GDF file writer
  Filename = C:/Users/arellanon/Documents/Tesis/data/Z03/R4/Z03_FILT_S1R4.gdf
Input stream 1=#2.Experiment information, Input stream 2=#2.Signal stream, Input stream 3=#2.Stimulations -> Generic stream writer
  Filename = C:/Users/arellanon/Documents/Tesis/data/Z03/R4/Z03_S1R4.ov
  Use compression = false
Experiment information=#2.Experiment information, Signal=#2.Signal stream, Stimulation=#2.Stimulations -> GDF file writer
  Filename = C:/Users/arellanon/Documents/Tesis/data/Z03/R4/Z03_S1R4.gdf
